---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Task Switching"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\olferskjf\\surfdrive - Kerwin Olfers@surfdrive.surf.nl\\1. SOLO\\5. Projects\\2023_02_08 COG Eline DeKeyster Opensesame en Qualtrics\\2023-08-22"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background gray

define sketchpad end_of_practice_block
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="That was the end of this practice round. <br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad end_of_practice_block_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Dit is het einde van deze oefenronde.<br /><br />Druk nu op een knop om verder te gaan." x=0 y=0 z_index=0

define sketchpad end_of_task
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You are now done with this task. Good job!<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad end_of_task_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="U bent nu klaar met deze taak. Gefeliciteerd!<br /><br />Druk nu op een knop om verder te gaan." x=0 y=0 z_index=0

define sketchpad example1_magnitude
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=2 x=0 y=0 z_index=0
	draw rect color="[m1_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this example, the number is '2'.<br /><br />This means your response should be 'smaller', <br />which you indicate by pressing the F key." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Press any key to see another example." x=0 y=224 z_index=0

define sketchpad example1_magnitude_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=2 x=0 y=0 z_index=0
	draw rect color="[m1_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In dit voorbeeld is het getal '2'.<br /><br />Uw antwoord moet daarom 'kleiner' zijn, <br />wat u aangeeft door op de F knop te drukken." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Druk nu op een knop voor nog een voorbeeld." x=0 y=224 z_index=0

define sketchpad example1_parity
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=3 x=0 y=0 z_index=0
	draw rect color="[p1_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this example, the number is '3'.<br /><br />This means your response should be 'odd',<br /> which you indicate by pressing the F key." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Press any key to see another example." x=0 y=224 z_index=0

define sketchpad example1_parity_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=3 x=0 y=0 z_index=0
	draw rect color="[p1_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In dit voorbeeld is het getal '3'.<br /><br />Uw antwoord moet daarom 'oneven' zijn,<br /> wat u aangeeft door op de F knop te drukken." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Druk nu op een knop voor nog een voorbeeld." x=0 y=224 z_index=0

define sketchpad example2_magnitude
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=8 x=0 y=0 z_index=0
	draw rect color="[m2_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this example, the number is '8'.<br /><br />This means your response should be 'larger', <br />which you indicate by pressing the J key." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Press any key to continue." x=0 y=224 z_index=0

define sketchpad example2_magnitude_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=8 x=0 y=0 z_index=0
	draw rect color="[m2_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In dit voorbeeld is het getal '8'.<br /><br />Uw antwoord moet daarom 'groter' zijn,<br /> wat u aangeeft door op de J knop te drukken." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Druk nu op een knop om verder te gaan." x=0 y=224 z_index=0

define sketchpad example2_parity
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=6 x=0 y=0 z_index=0
	draw rect color="[p2_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this example, the number is '6'.<br /><br />This means your response should be 'even',<br /> which you indicate by pressing the J key." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Press any key to continue." x=0 y=224 z_index=0

define sketchpad example2_parity_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=6 x=0 y=0 z_index=0
	draw rect color="[p2_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In dit voorbeeld is het getal '6'.<br /><br />Uw antwoord moet daarom 'even' zijn, <br />wat u aangeeft door op de J knop te drukken." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Druk nu op een knop om verder te gaan." x=0 y=224 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getQueryParameters always
	run getFileNames always
	run screenScaling always
	run experiment_loop always

define loop experiment_loop
	set source_file "[file_counterbalance]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 p1_color blue
	setcycle 0 p2_color green
	setcycle 0 m1_color red
	setcycle 0 m2_color yellow
	run experiment_sequence

define sequence experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run language always
	run setColors always
	run setPracticeTaskOrder always
	run single_practice_loop_task1 always
	run single_practice_loop_task2 always
	run mixed_practice_loop always
	run experimental_loop always
	run end_of_task "[response_language] = e"
	run end_of_task_nl "[response_language] = n"

define loop experimental_block
	set source_file "[file_trials]"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 number 1
	setcycle 0 cue_color "[p1_color]"
	setcycle 0 correct_response f
	setcycle 1 number 2
	setcycle 1 cue_color "[p1_color]"
	setcycle 1 correct_response j
	setcycle 2 number 3
	setcycle 2 cue_color "[p1_color]"
	setcycle 2 correct_response f
	setcycle 3 number 4
	setcycle 3 cue_color "[p1_color]"
	setcycle 3 correct_response j
	setcycle 4 number 6
	setcycle 4 cue_color "[p1_color]"
	setcycle 4 correct_response j
	setcycle 5 number 7
	setcycle 5 cue_color "[p1_color]"
	setcycle 5 correct_response f
	setcycle 6 number 8
	setcycle 6 cue_color "[p1_color]"
	setcycle 6 correct_response j
	setcycle 7 number 9
	setcycle 7 cue_color "[p1_color]"
	setcycle 7 correct_response f
	setcycle 8 number 1
	setcycle 8 cue_color "[p2_color]"
	setcycle 8 correct_response f
	setcycle 9 number 2
	setcycle 9 cue_color "[p2_color]"
	setcycle 9 correct_response j
	setcycle 10 number 3
	setcycle 10 cue_color "[p2_color]"
	setcycle 10 correct_response f
	setcycle 11 number 4
	setcycle 11 cue_color "[p2_color]"
	setcycle 11 correct_response j
	setcycle 12 number 6
	setcycle 12 cue_color "[p2_color]"
	setcycle 12 correct_response j
	setcycle 13 number 7
	setcycle 13 cue_color "[p2_color]"
	setcycle 13 correct_response f
	setcycle 14 number 8
	setcycle 14 cue_color "[p2_color]"
	setcycle 14 correct_response j
	setcycle 15 number 9
	setcycle 15 cue_color "[p2_color]"
	setcycle 15 correct_response f
	setcycle 16 number 1
	setcycle 16 cue_color "[m1_color]"
	setcycle 16 correct_response f
	setcycle 17 number 2
	setcycle 17 cue_color "[m1_color]"
	setcycle 17 correct_response f
	setcycle 18 number 3
	setcycle 18 cue_color "[m1_color]"
	setcycle 18 correct_response f
	setcycle 19 number 4
	setcycle 19 cue_color "[m1_color]"
	setcycle 19 correct_response f
	setcycle 20 number 6
	setcycle 20 cue_color "[m1_color]"
	setcycle 20 correct_response j
	setcycle 21 number 7
	setcycle 21 cue_color "[m1_color]"
	setcycle 21 correct_response j
	setcycle 22 number 8
	setcycle 22 cue_color "[m1_color]"
	setcycle 22 correct_response j
	setcycle 23 number 9
	setcycle 23 cue_color "[m1_color]"
	setcycle 23 correct_response j
	setcycle 24 number 1
	setcycle 24 cue_color "[m2_color]"
	setcycle 24 correct_response f
	setcycle 25 number 2
	setcycle 25 cue_color "[m2_color]"
	setcycle 25 correct_response f
	setcycle 26 number 3
	setcycle 26 cue_color "[m2_color]"
	setcycle 26 correct_response f
	setcycle 27 number 4
	setcycle 27 cue_color "[m2_color]"
	setcycle 27 correct_response f
	setcycle 28 number 6
	setcycle 28 cue_color "[m2_color]"
	setcycle 28 correct_response j
	setcycle 29 number 7
	setcycle 29 cue_color "[m2_color]"
	setcycle 29 correct_response j
	setcycle 30 number 8
	setcycle 30 cue_color "[m2_color]"
	setcycle 30 correct_response j
	setcycle 31 number 9
	setcycle 31 cue_color "[m2_color]"
	setcycle 31 correct_response j
	run experimental_trial_sequence

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 task mixed
	setcycle 0 practice no
	run experimental_sequence

define sequence experimental_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback_3 always
	run instructions_experimental "[response_language] = e"
	run remember_mixed "[response_language] = e"
	run instructions_experimental_nl "[response_language] = n"
	run remember_mixed_nl "[response_language] = n"
	run experimental_block always

define sequence experimental_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run task_cue always
	run stimulus always
	run keyboard_response always
	run logger always
	run feedback_experimental "([count_experimental_trial_sequence]+1)%17 == 0 and [response_language] = e"
	run feedback_experimental_nl "([count_experimental_trial_sequence]+1)%17 == 0 and [response_language] = n"
	run reset_feedback_experimental "([count_experimental_trial_sequence]+1)%17 == 0"

define feedback feedback_experimental
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="This was round [block] out of 15.<br /><br />Your average response time was [avg_rt] milliseconds.<br />Your accuracy was [acc]%.<br /><br />Remember: <br /><br />If the frame is [p1_color] or [p2_color],<br /> you must do the odd/even task.<br /><br />If the frame is [m1_color] or [m2_color], <br />you must do the smaller/larger task.<br /><br />For 'odd' or 'smaller', press F<br />For 'even' or 'larger', press J<br /><br />Press any key to continue." x=0 y=0 z_index=0

define feedback feedback_experimental_nl
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Dit was ronde [block] van 15.<br /><br />Uw gemiddelde reactietijd was [avg_rt] milliseconden.<br />Uw accuratesse was [acc]%.<br /><br />Onthoud:<br /><br />Als het vierkant [p1_color_nl] of [p2_color_nl] is, <br />dan moet u de oneven/even taak doen.<br /><br />Als het vierkant [m1_color_nl] of [m2_color_nl] is, <br />dan moet u de kleiner/groter taak doen.<br /><br />Voor 'oneven' of 'kleiner', druk op F.<br />Voor 'even' of 'groter', druk op J.<br /><br />Druk nu op een knop om verder te gaan." x=0 y=0 z_index=0

define feedback feedback_practice
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="FEEDBACK<br /><br />Your average response time was [avg_rt] milliseconds.<br />Your accuracy was [acc]%.<br /><br /><br />This practice round will repeat itself if:<br />your average response time was longer than<br /> 1500 milliseconds (1.5 seconds) <br />or <br />your accuracy was lower than 80%.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define feedback feedback_practice_nl
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="FEEDBACK<br /><br />Uw gemiddelde reactietijd was [avg_rt] milliseconden.<br />Uw accuratesse was [acc]%.<br /><br /><br />Deze oefenronde zal zichzelf herhalen als:<br />uw gemiddelde reactietijd langer dan<br /> 1500 milliseconden (1.5 seconden) was<br />of<br />uw accuratesse lager dan 80% was.<br /><br />Druk nu op een knop om verder te gaan." x=0 y=0 z_index=0

define sketchpad fixation_dot
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw rect color=black fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0

define inline_javascript getFileNames
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// Updated 22-09-2023 To include more sequence files in pool (up to 250)
	
	vars.file_counterbalance = "ts_counterbalance_subject" + vars.participant_id + ".csv";
	vars.file_trials = "ts_sequence_subject"+ vars.participant_id + "_time" +vars.session +".csv";
	console.log(vars.file_counterbalance);
	console.log(vars.file_trials) ;
	__end__

define inline_javascript getQueryParameters
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	if (window.jatos){
	    if(jatos.urlQueryParameters.participant_id){
	        vars.participant_id = jatos.urlQueryParameters.participant_id
	    
	    } else {
	        console.log('Participant ID is not available (setting value to -1)')
	        vars.participant_id = -1
	    };
	    
	    if(jatos.urlQueryParameters.session){
	        vars.session = jatos.urlQueryParameters.session
	
	    } else {
	        console.log('Session is not available (setting value to -1)')
	        vars.session = -1
	    };
	    
	    if(jatos.urlQueryParameters.random_id){
	        vars.random_id = jatos.urlQueryParameters.random_id
	
	    } else {
	        console.log('Random id is not available (setting value to -1)')
	       
	        vars.random_id= -1
	    };
	
	}else{
	    console.log("Warning! Experiment running in dummy mode (outside of JATOS), do not collect real data this way! All query variables set to 1")
	    vars.participant_id = 1
	    vars.session = 1
	    vars.random_id = 1
	}
	
	if(vars.participant_id == -1 || vars.participant_id == 0){
	vars.random_id = 99999;
	vars.participant_id = 1;
	vars.session = 1;
	};
	
	console.log("Participant_id = " + vars.participant_id);
	console.log("Session = " + vars.session);
	console.log("Random_id = " + vars.random_id);
	__end__

define sketchpad instructions_experimental
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You are now done with all the practice rounds. <br />Good job!<br /><br />Now you are going to do the task for real. <br />This means you will alternate between the<br />odd/even and smaller/larger tasks.<br /><br />You will complete 15 rounds, <br />and each round will take about 1 minute. <br />You will have the chance to take a brief break after each round, <br />but don't take a break longer than a few seconds.<br /><br />Try to be as fast and accurate as possible.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad instructions_experimental_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="U bent nu klaar met alle oefenrondes. <br />Gefeliciteerd!<br /><br />Nu gaat u de taak echt doen. <br />Dat betekent dat u zult wisselen tussen de <br />oneven/even taak en de kleiner/groter taak.<br /><br />U gaat 15 rondes doen,<br /> en elke ronde duurt ongeveer 1 minuut. <br />U heeft de mogelijkheid om na elke ronde even te pauzeren, <br />maar neem niet langer dan een paar seconden pauze.<br /><br />Probeer zo snel en accuraat mogelijk te zijn.<br /><br />Druk nu op een knop om te beginnen." x=0 y=0 z_index=0

define sketchpad instructions_general
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You will now practice for a bit. <br />Please keep your eyes on the center of the screen at all time.<br /><br />Put your left index finger on the F key,<br /> and put your right index finger on the J key.<br /><br />Try to be as fast and accurate as possible.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad instructions_general_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="U gaat de taak nu even oefenen. <br />Kijk alstublieft altijd naar het midden van het scherm.<br /><br />Plaats uw linker wijsvinger op de F knop,<br /> en plaats uw rechter wijsvinger op de J knop.<br /><br />Probeer zo snel en accuraat mogelijk te zijn.<br /><br />Druk nu op een knop om verder te gaan." x=0 y=0 z_index=0

define sketchpad instructions_magnitude
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Next you will see numbers, <br />one at a time. <br />The number will be inside a square frame. <br />This frame will be black at first, <br />but then change into a different color.<br /><br />The color of the frame is important,<br /> because it tells you how to judge the number.<br /><br />If the color is [m1_color] or [m2_color],<br /> you have to judge if the number is smaller or larger <br />than the number 5.<br /><br />Smaller numbers: 1, 2, 3, 4<br />Larger numbers: 6, 7, 8, 9<br /><br />For 'smaller', press the F key<br />For 'larger', press the J key<br /><br />Press any key to see an example." x=0 y=0 z_index=0

define sketchpad instructions_magnitude_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Straks zult u getallen zien, <br />één voor één. Het getal zal verschijnen binnen een vierkant. <br />Dat vierkant is eerst zwart, <br />maar verandert daarna van kleur.<br /><br />De kleur van het vierkant is belangrijk,<br /> want het geeft aan hoe u het getal moet beoordelen.<br /><br />Als de kleur [m1_color_nl] of [m2_color_nl] is, <br />dan moet u aangeven of het getal kleiner of groter is dan '5'.<br /><br />Kleinere getallen: 1, 2, 3, 4<br />Grotere getallen: 6, 7, 8, 9<br /><br />Voor 'kleiner', druk op de F knop.<br />Voor 'groter', druk op de J knop.<br /><br />Druk nu op een knop om een voorbeeld te zien." x=0 y=0 z_index=0

define sketchpad instructions_mixed
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Now you are going to practice alternating between <br />the odd/even and smaller/larger tasks.<br /><br />Pay close attention to the color of the frame, <br />because it tells you what task to perform.<br /><br />If the frame is [p1_color] or [p2_color],<br /> you must do the odd/even task.<br /><br />If the frame is [m1_color] or [m2_color],<br /> you must do the smaller/larger task.<br /><br />For 'odd' or 'smaller', press F<br /><br />For 'even' or 'larger', press J<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad instructions_mixed_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Nu gaat u oefenen met wisselen tussen de<br /> oneven/even taak en de kleiner/groter taak.<br /><br />Let goed op de kleur van het vierkant,<br /> want dit geeft aan welke taak u moet doen.<br /><br />Als het vierkant [p1_color_nl] of [p2_color_nl] is, <br />dan moet u de oneven/even taak doen.<br /><br />Als het vierkant [m1_color_nl] of [m2_color_nl] is, <br />dan moet u de kleiner/groter taak doen.<br /><br />Voor 'oneven' of 'kleiner', druk op F.<br /><br />Voor 'even' of 'groter', druk op J.<br /><br />Druk nu op een knop om verder te gaan." x=0 y=0 z_index=0

define sketchpad instructions_parity
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Next you will see numbers, one at a time. <br />The number will be inside a square frame. <br />This frame will be black at first, <br />but then change into a different color.<br /><br />The color of the frame is important,<br /> because it tells you how to judge the number.<br /><br />If the color is [p1_color] or [p2_color],<br /> you have to judge if the number is odd or even.<br /><br />Odd numbers: 1, 3, 7, 9<br />Even numbers: 2, 4, 6, 8<br /><br />For 'odd', press the F key<br />For 'even', press the J key<br /><br />Press any key to see an example." x=0 y=0 z_index=0

define sketchpad instructions_parity_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Straks zult u getallen zien, één voor één. <br />Het getal zal verschijnen binnen een vierkant. <br />Dat vierkant is eerst zwart, <br />maar verandert daarna van kleur.<br /><br />De kleur van het vierkant is belangrijk,<br /> want het geeft aan hoe u het getal moet beoordelen.<br /><br />Als de kleur [p1_color_nl] of [p2_color_nl] is, <br />dan moet u aangeven of het getal oneven of even is.<br /><br />Oneven getallen: 1, 3, 7, 9<br />Even getallen: 2, 4, 6, 8<br /><br />Voor 'oneven', druk op de F knop.<br />Voor 'even', druk op de J knop.<br /><br />Druk nu op een knop om een voorbeeld te zien." x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "f;j"

define keyboard_response language
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "e;n"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop magnitude_practice_block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 digit 1
	setcycle 0 cue_color "[m1_color]"
	setcycle 0 correct_response f
	setcycle 1 digit 2
	setcycle 1 cue_color "[m1_color]"
	setcycle 1 correct_response f
	setcycle 2 digit 3
	setcycle 2 cue_color "[m1_color]"
	setcycle 2 correct_response f
	setcycle 3 digit 4
	setcycle 3 cue_color "[m1_color]"
	setcycle 3 correct_response f
	setcycle 4 digit 6
	setcycle 4 cue_color "[m1_color]"
	setcycle 4 correct_response j
	setcycle 5 digit 7
	setcycle 5 cue_color "[m1_color]"
	setcycle 5 correct_response j
	setcycle 6 digit 8
	setcycle 6 cue_color "[m1_color]"
	setcycle 6 correct_response j
	setcycle 7 digit 9
	setcycle 7 cue_color "[m1_color]"
	setcycle 7 correct_response j
	setcycle 8 digit 1
	setcycle 8 cue_color "[m2_color]"
	setcycle 8 correct_response f
	setcycle 9 digit 2
	setcycle 9 cue_color "[m2_color]"
	setcycle 9 correct_response f
	setcycle 10 digit 3
	setcycle 10 cue_color "[m2_color]"
	setcycle 10 correct_response f
	setcycle 11 digit 4
	setcycle 11 cue_color "[m2_color]"
	setcycle 11 correct_response f
	setcycle 12 digit 6
	setcycle 12 cue_color "[m2_color]"
	setcycle 12 correct_response j
	setcycle 13 digit 7
	setcycle 13 cue_color "[m2_color]"
	setcycle 13 correct_response j
	setcycle 14 digit 8
	setcycle 14 cue_color "[m2_color]"
	setcycle 14 correct_response j
	setcycle 15 digit 9
	setcycle 15 cue_color "[m2_color]"
	setcycle 15 correct_response j
	run trial_sequence

define loop mixed_instructions_en
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run mixed_instructions_en_sequence

define sequence mixed_instructions_en_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions_mixed always
	run instructions_general always
	run remember_mixed always

define loop mixed_instructions_nl
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run mixed_instructions_nl_sequence

define sequence mixed_instructions_nl_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions_mixed_nl always
	run instructions_general_nl always
	run remember_mixed_nl always

define loop mixed_practice_block
	set source_file ""
	set source table
	set repeat 0.5
	set order random
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 digit 1
	setcycle 0 cue_color "[p1_color]"
	setcycle 0 correct_response f
	setcycle 1 digit 2
	setcycle 1 cue_color "[p1_color]"
	setcycle 1 correct_response j
	setcycle 2 digit 3
	setcycle 2 cue_color "[p1_color]"
	setcycle 2 correct_response f
	setcycle 3 digit 4
	setcycle 3 cue_color "[p1_color]"
	setcycle 3 correct_response j
	setcycle 4 digit 6
	setcycle 4 cue_color "[p1_color]"
	setcycle 4 correct_response j
	setcycle 5 digit 7
	setcycle 5 cue_color "[p1_color]"
	setcycle 5 correct_response f
	setcycle 6 digit 8
	setcycle 6 cue_color "[p1_color]"
	setcycle 6 correct_response j
	setcycle 7 digit 9
	setcycle 7 cue_color "[p1_color]"
	setcycle 7 correct_response f
	setcycle 8 digit 1
	setcycle 8 cue_color "[p2_color]"
	setcycle 8 correct_response f
	setcycle 9 digit 2
	setcycle 9 cue_color "[p2_color]"
	setcycle 9 correct_response j
	setcycle 10 digit 3
	setcycle 10 cue_color "[p2_color]"
	setcycle 10 correct_response f
	setcycle 11 digit 4
	setcycle 11 cue_color "[p2_color]"
	setcycle 11 correct_response j
	setcycle 12 digit 6
	setcycle 12 cue_color "[p2_color]"
	setcycle 12 correct_response j
	setcycle 13 digit 7
	setcycle 13 cue_color "[p2_color]"
	setcycle 13 correct_response f
	setcycle 14 digit 8
	setcycle 14 cue_color "[p2_color]"
	setcycle 14 correct_response j
	setcycle 15 digit 9
	setcycle 15 cue_color "[p2_color]"
	setcycle 15 correct_response f
	setcycle 16 digit 1
	setcycle 16 cue_color "[m1_color]"
	setcycle 16 correct_response f
	setcycle 17 digit 2
	setcycle 17 cue_color "[m1_color]"
	setcycle 17 correct_response f
	setcycle 18 digit 3
	setcycle 18 cue_color "[m1_color]"
	setcycle 18 correct_response f
	setcycle 19 digit 4
	setcycle 19 cue_color "[m1_color]"
	setcycle 19 correct_response f
	setcycle 20 digit 6
	setcycle 20 cue_color "[m1_color]"
	setcycle 20 correct_response j
	setcycle 21 digit 7
	setcycle 21 cue_color "[m1_color]"
	setcycle 21 correct_response j
	setcycle 22 digit 8
	setcycle 22 cue_color "[m1_color]"
	setcycle 22 correct_response j
	setcycle 23 digit 9
	setcycle 23 cue_color "[m1_color]"
	setcycle 23 correct_response j
	setcycle 24 digit 1
	setcycle 24 cue_color "[m2_color]"
	setcycle 24 correct_response f
	setcycle 25 digit 2
	setcycle 25 cue_color "[m2_color]"
	setcycle 25 correct_response f
	setcycle 26 digit 3
	setcycle 26 cue_color "[m2_color]"
	setcycle 26 correct_response f
	setcycle 27 digit 4
	setcycle 27 cue_color "[m2_color]"
	setcycle 27 correct_response f
	setcycle 28 digit 6
	setcycle 28 cue_color "[m2_color]"
	setcycle 28 correct_response j
	setcycle 29 digit 7
	setcycle 29 cue_color "[m2_color]"
	setcycle 29 correct_response j
	setcycle 30 digit 8
	setcycle 30 cue_color "[m2_color]"
	setcycle 30 correct_response j
	setcycle 31 digit 9
	setcycle 31 cue_color "[m2_color]"
	setcycle 31 correct_response j
	run trial_sequence

define loop mixed_practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 task mixed
	setcycle 0 practice yes
	run mixed_practice_sequence

define sequence mixed_practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback always
	run trialCounterReset always
	run mixed_instructions_en "[response_language] = e"
	run mixed_instructions_nl "[response_language] = n"
	run mixed_practice_block always
	run repeat_practice always
	run end_of_practice_block "[response_language] = e"
	run end_of_practice_block_nl "[response_language] = n"

define reset_feedback new_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback new_reset_feedback_3
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define loop parity_practice_block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 digit 1
	setcycle 0 cue_color "[p1_color]"
	setcycle 0 correct_response f
	setcycle 1 digit 2
	setcycle 1 cue_color "[p1_color]"
	setcycle 1 correct_response j
	setcycle 2 digit 3
	setcycle 2 cue_color "[p1_color]"
	setcycle 2 correct_response f
	setcycle 3 digit 4
	setcycle 3 cue_color "[p1_color]"
	setcycle 3 correct_response j
	setcycle 4 digit 6
	setcycle 4 cue_color "[p1_color]"
	setcycle 4 correct_response j
	setcycle 5 digit 7
	setcycle 5 cue_color "[p1_color]"
	setcycle 5 correct_response f
	setcycle 6 digit 8
	setcycle 6 cue_color "[p1_color]"
	setcycle 6 correct_response j
	setcycle 7 digit 9
	setcycle 7 cue_color "[p1_color]"
	setcycle 7 correct_response f
	setcycle 8 digit 1
	setcycle 8 cue_color "[p2_color]"
	setcycle 8 correct_response f
	setcycle 9 digit 2
	setcycle 9 cue_color "[p2_color]"
	setcycle 9 correct_response j
	setcycle 10 digit 3
	setcycle 10 cue_color "[p2_color]"
	setcycle 10 correct_response f
	setcycle 11 digit 4
	setcycle 11 cue_color "[p2_color]"
	setcycle 11 correct_response j
	setcycle 12 digit 6
	setcycle 12 cue_color "[p2_color]"
	setcycle 12 correct_response j
	setcycle 13 digit 7
	setcycle 13 cue_color "[p2_color]"
	setcycle 13 correct_response f
	setcycle 14 digit 8
	setcycle 14 cue_color "[p2_color]"
	setcycle 14 correct_response j
	setcycle 15 digit 9
	setcycle 15 cue_color "[p2_color]"
	setcycle 15 correct_response f
	run trial_sequence

define sketchpad remember_magnitude
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="REMINDER:<br /><br />When the frame turns [m1_color] or [m2_color], <br />you must indicate if the number is smaller or larger than 5.<br /><br />Press F for 'smaller'.<br />Press J for 'larger'.<br /><br />Press any key to start the practice" x=0 y=0 z_index=0

define sketchpad remember_magnitude_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="HERINNERING:<br /><br />Als de kleur [m1_color_nl] of [m2_color_nl] is,<br /> dan moet u aangeven of het getal kleiner of groter is dan '5'.<br /><br />Voor 'kleiner', druk op de F knop.<br />Voor 'groter', druk op de J knop.<br /><br />Druk nu op een knop om te beginnen met oefenen." x=0 y=0 z_index=0

define sketchpad remember_mixed
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="REMINDER:<br /><br />If the frame is [p1_color] or [p2_color],<br /> you must do the odd/even task.<br /><br />If the frame is [m1_color] or [m2_color],<br /> you must do the smaller/larger task.<br /><br />For 'odd' or 'smaller', press F<br /><br />For 'even' or 'larger', press J<br /><br />Press any key to start." x=0 y=0 z_index=0

define sketchpad remember_mixed_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="HERINNERING:<br /><br />Als het vierkant [p1_color_nl] of [p2_color_nl] is, <br />dan moet u de oneven/even taak doen.<br /><br />Als het vierkant [m1_color_nl] of [m2_color_nl] is, <br />dan moet u de kleiner/groter taak doen.<br /><br />Voor 'oneven' of 'kleiner', druk op F.<br /><br />Voor 'even' of 'groter', druk op J.<br /><br />Druk nu op een knop om te beginnen." x=0 y=0 z_index=0

define sketchpad remember_parity
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="REMINDER:<br /><br />When the frame turns [p1_color] or [p2_color], <br />you must indicate if the number is odd or even.<br /><br />Press F for 'odd'.<br />Press J for 'even'.<br /><br />Press any key to start the practice" x=0 y=0 z_index=0

define sketchpad remember_parity_nl
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="HERINNERING:<br /><br />Als de kleur [p1_color_nl] of [p2_color_nl] is,<br /> dan moet u aangeven of het getal oneven of even is.<br /><br />Voor 'oneven', druk op de F knop.<br />Voor 'even', druk op de J knop.<br /><br />Druk nu op een knop om te beginnen met oefenen." x=0 y=0 z_index=0

define repeat_cycle repeat_practice
	set description "Optionally repeat a cycle from a loop"
	set condition "[acc] < 80 or [avg_rt] > 1500"

define reset_feedback reset_feedback_experimental
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_javascript screenScaling
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// The code below will fetch the scaleMode from the 
	// the Batch Properties in JATOS--or, if unavailable,
	// use the defaultScaleMode set below--to override
	// the OSWeb scaleMode parameter.
	// The scale modes are:
	//   noScale  -> no scaling.
	//   showAll  -> scales (w/o stretching).
	//   exactFit -> scales/stretches to fill screen fully.
	vars.curScaleMode = "NOT BROWSER";
	try {
	    const defaultScaleMode = "showAll";
	    if (typeof jatos != "undefined") {
	        var batchParams = jatos.batchJsonInput || {};
	    } else {
	        var batchParams = {};
	    }
	    runner._scaleMode = batchParams.scaleMode || defaultScaleMode;
	    vars.curScaleMode = runner._scaleMode;
	    document.getElementById('osweb_div').setAttribute("style",`background:${vars.background};`);
	} catch (error) {
	    console.log("Error caught:");
	    console.error(error);
	}
	__end__

define inline_javascript setColors
	set description "Executes JavaScript code"
	___run__
	// set the dutch version of the colors
	let myvars = ['p1_color','p2_color','m1_color','m2_color'];
	
	for (let myvar of myvars){
	    if(vars[myvar]==="blue"){vars[myvar+'_nl']="blauw"};
	    if(vars[myvar]==="green"){vars[myvar+'_nl']="groen"};
	    if(vars[myvar]==="red"){vars[myvar+'_nl']="rood"};
	    if(vars[myvar]==="yellow"){vars[myvar+'_nl']="geel"};
	    
	    // log it to console
	    console.log(myvar+'_nl = ' + vars[myvar+'_nl'])
	};
	__end__
	set _prepare ""

define inline_javascript setPracticeTaskOrder
	set description "Executes JavaScript code"
	___run__
	let practice_tasks = ["parity","magnitude"];
	
	/* Randomize array in-place using Durstenfeld shuffle algorithm */
	function shuffleArray(array) {
	    for (var i = array.length - 1; i > 0; i--) {
	        var j = Math.floor(Math.random() * (i + 1));
	        var temp = array[i];
	        array[i] = array[j];
	        array[j] = temp;
	    }
	    return array
	}
	
	// get a randomised order
	vars.practice_order = shuffleArray(practice_tasks)
	vars.practice_task_1 = vars.practice_order[0]
	vars.practice_task_2 = vars.practice_order[1]
	console.log(vars.practice_order)
	console.log(vars.practice_task_1)
	console.log(vars.practice_task_2)
	__end__
	set _prepare ""

define loop single_instructions_en
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run single_instructions_en_sequence

define sequence single_instructions_en_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions_parity "[task] = parity"
	run example1_parity "[task] = parity"
	run example2_parity "[task] = parity"
	run instructions_magnitude "[task] = magnitude"
	run example1_magnitude "[task] = magnitude"
	run example2_magnitude "[task] = magnitude"
	run instructions_general always
	run remember_parity "[task] = parity"
	run remember_magnitude "[task] = magnitude"

define loop single_instructions_nl
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run single_instructions_nl_sequence

define sequence single_instructions_nl_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions_parity_nl "[task] = parity"
	run example1_parity_nl "[task] = parity"
	run example2_parity_nl "[task] = parity"
	run instructions_magnitude_nl "[task] = magnitude"
	run example1_magnitude_nl "[task] = magnitude"
	run example2_magnitude_nl "[task] = magnitude"
	run instructions_general_nl always
	run remember_parity_nl "[task] = parity"
	run remember_magnitude_nl "[task] = magnitude"

define loop single_practice_loop_task1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 task "[practice_task_1]"
	setcycle 0 practice yes
	run single_practice_sequence

define loop single_practice_loop_task2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 task "[practice_task_2]"
	setcycle 0 practice yes
	run single_practice_sequence

define sequence single_practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback always
	run trialCounterReset always
	run single_instructions_en "[response_language] = e"
	run single_instructions_nl "[response_language] = n"
	run parity_practice_block "[task] = parity"
	run magnitude_practice_block "[task] = magnitude"
	run end_of_practice_block "[response_language] = e"
	run end_of_practice_block_nl "[response_language] = n"
	run repeat_practice always

define sketchpad stimulus
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[digit]" x=0 y=0 z_index=0
	draw rect color="[cue_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0

define sketchpad task_cue
	set duration 495
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw rect color="[cue_color]" fill=0 h=128 penwidth=10 show_if=always w=128 x=-64 y=-64 z_index=0

define inline_javascript trialCounter
	set description "Executes JavaScript code"
	___run__
	vars.trial_count += 1;
	vars.show_feedback = (vars.trial_count % 16);
	__end__
	set _prepare ""

define inline_javascript trialCounterReset
	set description "Executes JavaScript code"
	set _run "vars.trial_count = 0;"
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run task_cue always
	run stimulus always
	run keyboard_response always
	run logger always
	run trialCounter always
	run feedback_practice "[show_feedback]= 0 and [response_language] = e"
	run feedback_practice_nl "[show_feedback]= 0 and [response_language] = n"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Welcome.<br /><br />For English text, press the 'E' button.<br /><br />Voor Nederlandse tekst, druk op de 'N' knop." x=1 y=-60 z_index=0

